# ------------------------------- PCL Part ------------------------------
BLOCK = "test";



#SOME CONSTANTS
int ROW = 49;
int COLLUMN = 4;

array<string> sequence[ROW][COLLUMN] = read_sequence_file( logfile.subject() ); #the function returns a 2-D string array.

loop
    int i = 1
until
    i > COLLUMN
begin
		
	loop
		int j = 1
	until
		j > ROW
	begin
		int this_iti = random( 1000, 2000 ) ;
		play_ITI_trial( this_iti );
		int sound_idx = int(sequence[j][i]);		
		play_sound_trial( sound_idx, BLOCK, i, j, this_iti);
			
		j = j + 1;
	end;
	
	play_break_trial( "BREAK" );
	play_ITI_trial( 2000 ); #Just a 2 second buffer so the next block don't jump on you.
	
	i = i + 1;
end;

